Ge/CheckForOverlaps = "True"
Ge/QuitIfOverlapDetected = "True"
#b:Ts/PauseBeforeQuit = "True"


########### parameter settings for conversion of HU to materials using the schneiber ##########
includeFile = HUtoMaterialSchneider.txt
includeFile = Spectrum_nist.txt
#includeFile = Collimator_1mmX1mm.txt
includeFile = Shield.txt

####################### Geometry ############################


s:Ge/Patient/Parent   = "World"
s:Ge/Patient/Type     = "TsDicomPatient"
d:Ge/Patient/TransX   = 0. m
d:Ge/Patient/TransY   = 0. cm
d:Ge/Patient/TransZ   = 0. cm
d:Ge/Patient/RotX     = 180. deg
d:Ge/Patient/RotY     = 0. deg
d:Ge/Patient/RotZ     = 0. deg


############### Additional needed for DICOM input ###################

s:Ge/Patient/DicomDirectory = "../CT_Need"
sv:Ge/Patient/DicomModalityTags = 1 "CT"
b:Ge/Patient/SchneiderUseVariableDensityMaterials = "True"

############### check if the slice thickness are different ################

#b:Ge/Patient/ShowSliceSeparations = "True"

############### Physics #############

sv:Ph/Default/Modules = 1 "g4em-standard_opt4" 
d:Ph/Default/CutForAllParticle = 0.05 mm
d:Ph/Default/ForRegion/Shield/CutforElectron = 1 mm

##################### Beam Position #####################

s:Ge/BeamPosition/Parent		  = "World"
s:Ge/BeamPosition/Type                    = "Group"
#s:Ge/BeamPosition/Type    		  = "TsBox"
#s:Ge/BeamPosition/Material 		  = "G4_WATER"
d:Ge/BeamPosition/TransX 		  = -1. cm
d:Ge/BeamPosition/TransY		  = -4. cm
d:Ge/BeamPosition/TransZ 	          = 43.8 cm # Shelf 3 / 16.3 start point (319) + 24.5
# Shelf 4 : 25 , Shelf 3 : 35.6 cm  +8.4 cm must be include
# 4.3 Above the skin, 6.9 below the collimator 12.1 Above the shield 
d:Ge/BeamPosition/RotX 			  = 180. deg
d:Ge/BeamPosition/RotY 			  = 0. deg
d:Ge/BeamPosition/RotZ			  = 0. deg
#d:Ge/BeamPosition/HLX    		  = 2.5 mm
#d:Ge/BeamPosition/HLY     	          = 2.5 mm
#d:Ge/BeamPosition/HLZ     		  = 2.5 mm


#################### Beam information ###########################

s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "gamma"
s:So/Example/BeamPositionDistribution = "Gaussian"
s:So/Example/BeamPositionCutoffShape  = "Ellipse"
d:So/Example/BeamPositionCutoffX      = 5.5 mm   #5.5 mm
d:So/Example/BeamPositionCutoffY      = 5.5 mm
d:So/Example/BeamPositionSpreadX      = 0.1 cm
d:So/Example/BeamPositionSpreadY      = 0.1 cm
s:So/Example/BeamAngularDistribution  = "Flat"
d:So/Example/BeamAngularCutoffX       = 18.75 deg
d:So/Example/BeamAngularCutoffY       = 18.75 deg

######################### Graphics ########################


#s:Gr/ViewA/Type           = "OpenGL"
#sv:Gr/ViewA/VisibleWorlds = 1 "All"
#Ts/UseQt = "True"
#i:Gr/ViewA/WindowSizeX    = 1024
#i:Gr/ViewA/WindowSizeY    = 768
#d:Gr/ViewA/Theta          = 60 deg
#d:Gr/ViewA/Phi            = 10 deg
#s:Gr/ViewA/Projection       = "Perspective" 
#d:Gr/ViewA/PerspectiveAngle = 30 deg  # default 30 degree 
#b:Gr/ViewA/IncludeGeometry = "True" 	
#b:Gr/ViewA/IncludeTrajectories = "True"
#b:Gr/ViewA/IncludeAxes = "True"
#b:Gr/ViewA/IncludeStepPoints = "True"
#s:Gr/ViewA/AxesComponent  = "Patient"
#d:Gr/ViewA/AxesSize = 30. cm
#u:Gr/ViewA/Zoom             = 3.0 # increase the focus point 
#b:Gr/ViewA/CopyOpenGLToPDF = "True"
#s:Gr/ViewA/FileName = "CT_Geometry_CT_MPS3"


########### Extra graphics options to handle complex voxel geometries if eceed this number, just display outline ############

#i:Gr/ShowOnlyOutlineIfVoxelCountExceeds = 10
b:Ts/DumpNonDefaultParameters = "True"








